OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)
Comment
  OpenvibeToUnityAnalog

  This scenario shows how to send the analog signal, acquired from
  an EEG device, through the "UIVA Server" using "VRPN" to "Unity3d".
Comment
  Notes

  Step1) Run an OpenViBE Acquisition Server and
  complete the settings.
  ex> Driver='Generic Oscillator', Port='1024', Sample count='128',
  In the properties, # of channels='1', Fs='128' and so on...

  Step2) Set the same port number with the acquisition server.
  ex> 1024

  Step3) Make sure the peripheral names of "Analog VRPN Server"
   box and "UIVA_Server.cfg" are the same.
  ex> openvibe_vrpn_analog@localhost
Comment
  The Order of Execution

  1. OpenViBE Acquisition Server (Connect and Play)
  2. OpenViBE Designer (Starts Button)
  3. UIVA_Server (Run)
  4. Unity3d (Play)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Simple DSP "X^2"
  Equation = x*x
-> Signal average => #2
-> Analog VRPN Server
  Peripheral name = openvibe_vrpn_analog@localhost
Data=#2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
