OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)
Comment
  OpenvibeToUnityButton

  This scenario shows how to send the button stimulations, entered from
  the keyboard, through the "UIVA Server" using "VRPN" to "Unity3d".
  In this scenario, "Sinus oscillator" box is used to generate a virtual
   signal instead of "acquisition client" box.
Comment
  Notes

  Step1) Complete the settings of "Sinus oscillator" box.
  ex> # of channels='4', Fs='1', Sample count='1'

  Step2) Make sure the peripheral names of "Analog VRPN Server"
   box and "UIVA_Server.cfg" are the same.
  ex> openvibe_vrpn_analog@localhost

  Step3) Make sure the peripheral names of "Button VRPN Server"
   box and "UIVA_Server.cfg" are the same.
  ex> openvibe_vrpn_button@localhost


  If you enter the keyboard 'a' and 'z' during the execution, you can see
  the stimulations through the "Signal display" box, and at the same time
  the stimulations are also sent to Unity3d.

Sinus oscillator
  Channel count = 4
  Sampling frequency = 1
  Generated epoch sample count = 1
-> Simple DSP "X^2" => #1
  Equation = x*x
-> Analog VRPN Server
  Peripheral name = openvibe_vrpn_analog@localhost
Keyboard stimulator => #3
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
Data=#1, Stimulations=#3 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input 1=#3, Input 2=#3 -> Button VRPN Server
  Peripheral name = openvibe_vrpn_button@localhost
  Button 1 ON = OVTK_StimulationId_Label_01
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_02
  Button 2 OFF = OVTK_StimulationId_Label_00
