OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)
Comment
  Playing

  This scenario shows how to send the signal, measured from an EEG device
  and classified by the classifier generated during the training time, to Unity3d.
Comment
  Notes

  In order to run this 'Playing' scenario,
  the 'Training' scenario must be performed first.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#0.Signal stream -> Signal display "Palyer1"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Signal stream -> Temporal filter "Band pass filter"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 15
  High Cut-off Frequency (Hz) = 20
  Band Pass Ripple (dB) = 0.5
-> Channel Selector
  Channel List = :
  Action = Select
  Channel Matching Method = Smart
-> Simple DSP "X^2"
  Equation = x*x
-> Python scripting => #5
  Clock frequency (Hz) = 1
  Script = C:/Users/user/AppData/Roaming/openvibe-2.1.0/script/Playing.py
-> Analog VRPN Server
  Peripheral name = openvibe_vrpn_analog@localhost
Data=#5 -> Signal display "Class Number"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#0.Signal stream -> GDF file writer
  Filename = U:/devTraining.gdf
