OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)
Comment
  SimpleSignalProcessing

  This scenario shows how to send the signal, measured from an EEG device
  and processed in "Python scripting" box, to Unity3d.
Comment
  Notes

  Step1) Set the same port number with the acquisition server.
  ex> 1024

  Step2) Make sure the path to the script that you want to use.
  ex> D:/~/script/SimpleSignalProcessing.py

  Step3) Make sure the peripheral names of "Analog VRPN Server"
   box and "UIVA_Server.cfg" are the same.
  ex> openvibe_vrpn_analog@localhost

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#0.Signal stream -> Signal display "Palyer1"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Signal stream -> Simple DSP "X^2" => #2
  Equation = x*x
player1=#2 -> Python scripting => #3
  Clock frequency (Hz) = 1
  Script = C:/Users/user/AppData/Roaming/openvibe-2.1.0/script/SimpleSignalProcessing.py
#3.command -> Analog VRPN Server
  Peripheral name = openvibe_vrpn_analog@localhost
Data=#3.command -> Signal display "Mean_p1"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
