OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)
Comment
  SimpleSignalProcessingMulti

  This scenario shows how to send the signal, measured from two EEG devices
  and processed in "Python scripting" box, to Unity3d.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#0.Signal stream -> Signal display "Palyer1"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Signal stream -> Simple DSP "X^2" => #2
  Equation = x*x
Acquisition client => #3
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1025
#3.Signal stream -> Simple DSP "X^2" => #4
  Equation = x*x
player1=#2, player2=#4 -> Python scripting => #5
  Clock frequency (Hz) = 1
  Script = C:/Users/user/AppData/Roaming/openvibe-2.1.0/script/SimpleSignalProcessingMulti.py
Data=#5.player1 -> Signal display "Mean_p1"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input 1=#5.player1, Input 2=#5.player2 -> Analog VRPN Server
  Peripheral name = openvibe_vrpn_analog@localhost
Data=#5.player2 -> Signal display "Mean_p2"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#3.Signal stream -> Signal display "Palyer2"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
