OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)
Comment
  Training

  This scenario shows how to train the signal measured from an EEG device
  and generate a classifier in "Python scripting" box.
  If you press the keyboard button 'a', then the training operates for the given time.
  When the time is up, this scenario is automatically stopped.
Comment
  Notes

  Step1) Make sure the path to the cue image, which is used
  to display a fixation-cross image during the training time.
  ex> D:/~/image/fixation_cross.PNG

  Step2) Make sure the path of the GDF file to store the raw signal.
  ex> D:/~/devTraining.gdf

  Step3) Choose among a variety of filter types to process the signal.
  ex> Band pass Butterworth filter of 4th order, 15-20Hz

  Step4) Choose the interested channels on a list of channels.
  ex> Channel name => AF3;AF4;F3;F4;Fz or
  Index => 6;8;13;15;17

  Step5) Set the path, the training time,
  and the class number in the configuration file.
  Check a 'O2U_PythonScript.cfg' file.
Comment
   Also, you should check the notes in the preceding example
  "SimpleSignalProcessing" as well.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#0.Signal stream -> Signal display "Palyer1"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Signal stream -> Temporal filter "Band pass filter"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 15
  High Cut-off Frequency (Hz) = 20
  Band Pass Ripple (dB) = 0.5
-> Channel Selector
  Channel List = :
  Action = Select
  Channel Matching Method = Smart
-> Simple DSP "X^2" => #4
  Equation = x*x
Keyboard stimulator => #5
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
Signal=#0.Signal stream, Stimulation=#5 -> GDF file writer
  Filename = U:/devTraining.gdf
player1=#4, stim1=#5 -> Python scripting => #7
  Clock frequency (Hz) = 1
  Script = C:/Users/user/AppData/Roaming/openvibe-2.1.0/script/Training.py
#7.command -> Analog VRPN Server
  Peripheral name = openvibe_vrpn_analog@localhost
#7.stim1 -> Player Controller
  Stimulation name = OVTK_StimulationId_Number_01
  Action to perform = Stop
Data=#7.command, Stimulations=#7.stim1 -> Signal display "Mean_p1"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

Clock stimulator
  Interstimulation interval (in sec) = 0.5
  Stimulation = OVTK_StimulationId_Label_01
-> Display cue image
  Display images in full screen = false
  Scale images to fit = true
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = C:/Users/user/AppData/Roaming/openvibe-2.1.0/image/fixation_cross.PNG
  Stimulation 1 = OVTK_StimulationId_Label_01
