OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)
Comment
  UnityToOpenvibeButton

  This scenario shows how to receive the button stimulations
  through the "UIVA Server" using "VRPN" from the "Unity3d".
Comment
  Notes

  Step1) Set the peripheral name of "Button VRPN Client"
   box to "unity_button@localhost:50555".

  Every time you send a stimulation in Unity3d,
  it will appear on the "Signal display" box.
Comment
   Also, you should check the notes in the preceding example
  "OpenvibeToUnityButton" as well.

Sinus oscillator
  Channel count = 1
  Sampling frequency = 1
  Generated epoch sample count = 1
-> Simple DSP "X^2" => #1
  Equation = x*x
-> Analog VRPN Server
  Peripheral name = openvibe_vrpn_analog@localhost
Button VRPN Client => #3
  Peripheral name = unity_button@localhost:50555
  Button 1 ON = OVTK_StimulationId_Number_01
  Button 1 OFF = OVTK_StimulationId_Number_00
Data=#1, Stimulations=#3 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

Keyboard stimulator => #5
  Filename = ${Path_Data}/plugins/stimulation/simple-keyboard-to-stimulations.txt
Input 1=#5, Input 2=#5 -> Button VRPN Server
  Peripheral name = openvibe_vrpn_button@localhost
  Button 1 ON = OVTK_StimulationId_Label_01
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_02
  Button 2 OFF = OVTK_StimulationId_Label_00
